PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001', 'gender': '', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = N-back
  keyboardBackend = ioHub
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Routines
  Routine Welcome
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = $key_resp==FINISHED
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      text:
        Welcome to the Motion Artefact experiment

        Thank you for participating

        Press SPACE to continue
  Routine Goodbye
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    KeyboardComponent key_resp_11
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_17
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = $key_resp_11==FINISHED
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      text:
        Goodjob!

        You completed the test.
        Please inform the researcher that you are ready.

        Thank you!
  Routine initial_rest
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        countdownClock = core.CountdownTimer(3)
      Each Frame:
        timeRest = int(countdownClock.getTime()) + 1
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every frame] = $timeRest
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  Routine goodjob
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_5==FINISHED
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      text:
        Goodjob!

        Press SPACE to continue
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        #import requests
        #IP = 'http://127.0.0.1:8888'

        import string
        letters = list(string.ascii_uppercase)
        presentedLetters = list()
      Begin Routine:
        #r = requests.post(IP + '/toggleMarker?id=' + str(thisSurvey + 4))





        n = 2 # first specify the n condition of the trial/block
        letterSelected = False # a boolean to state a letter has not yet been selected
        if not Target: # this is not a target trial
            while not letterSelected: # repeat the content of this loop until a letter is selected
                Letter = np.random.choice(letters)# if this is not a target then randomly choose
                if len(presentedLetters) < n or Letter != presentedLetters[-n]: # if n letters have not yet been presented, or this is not the same as the n-th trial back
                    letterSelected = True # accept this as the chosen letter
        else:
            Letter = presentedLetters[-n]# if this was a target choose the n'th back
        presentedLetters.append(Letter)
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $Letter
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
      text = *
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      correctAns = $CorrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = all keys
      storeCorrect = True
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  Routine baseline_rest
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    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = *
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  Routine goodjob2
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    TextComponent text_15
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = $key_resp_9==FINISHED
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      text:
        Goodjob!

        Press SPACE to continue
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start_trail
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    TextComponent text_16
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = $key_resp_10==FINISHED
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      text:
        We will now start the trail.

        It will be build up from 3 different blocks of 20 minutes, intermitted by a survey of 1 minute.

        Remember:
        SPACE = Letter is the same as 2 back
        None = Letter is not the same as 2 back

        Goodluck!
        Press SPACE to start
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block_announcement
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    TextComponent text_18
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $Msg
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  Routine fill_survey_test
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        countdownClock = core.CountdownTimer(60) # 60 s = 1 minute
      Each Frame:
        timeRemaining = int(countdownClock.getTime()) + 1
    SliderComponent slider
      forceEndRoutine = False
      granularity = 1
      labels = ('very low = alert', 'low', 'medium   = relaxed wakeful', 'high', 'very high = fatigued')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_8
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Please rate your level of mental fatigue at the moment from 1-5:
        (1 minute time before next block starts)
    TextComponent text_20
      letterHeight = 0.05
      pos = (0.5, -0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every frame] = $timeRemaining
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  Routine fill_survey
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_19
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [condition] = $key_resp_7==FINISHED
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      text:
        Please rate your level of mental fatigue at the moment from 1-5:
        (Press SPACE to continue)
    SliderComponent slider_2
      forceEndRoutine = False
      granularity = 1
      labels = ('very low = alert', 'low', 'medium   = relaxed wakeful', 'high', 'very high = fatigued')
      letterHeight = 0.05
      pos = (0, 0.1)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [condition] = $key_resp_7==FINISHED
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine Instruction_2_back
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = $key_resp_2==FINISHED
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      text:
        You will perform a 2-back task.

        A sequence of letters will be shown with each time an interstimulus interval in between.
        The letters are shown for 0.5 s and the interstimulus interval is 2.5 s. This means  that you have 3 s in total to respond.

        Task: Press SPACE if the shown letter is the same as the letter 2 back in the sequence.

        Press SPACE to continue
  Routine info_tests
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    TextComponent text_21
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_12==FINISHED
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      text:
        The task is to perform head movements according to the stimuli given ('UP/DOWN', 'LEFT/RIGHT' or 'RANDOM') on the display.

        You will have to perform the head movement as long as the word is displayed on the screen.
        In between tasks, a blank screen is presented. During this time you are asked to not perform any movement.

        Press SPACE to continue
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_0_back
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    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_24
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = key_resp_15==FINISHED
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      text:
        You will perform a 0-back task.

        A sequence of letters will be shown with each time an interstimulus interval in between.
        The letters are shown for 0.5 s and the interstimulus interval is 2.5 s. This means  that you have 3 s in total to respond.

        Task: Press SPACE if the shown letter is the same as the letter 2 back in the sequence.
  Routine start_practice_2_back
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = $key_resp_3==FINISHED
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      text:
        We will now perform a short practice run to get used to the 2-back test.

        A sequence of letters will be shown with each time an interstimulus interval in between.
        The letters are shown for 0.5 s and the interstimulus interval is 2.5 s. This means  that you have 3 s in total to respond.

        SPACE = letter is the same as 2 back
        None = letter is not the same as 2 back

        Press SPACE to start.
        The test will start after 3 seconds
  Routine practice_2_back
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        #import requests
        #IP = 'http://127.0.0.1:8888'
      Begin Routine:
        #r = requests.post(IP + '/toggleMarker?id=2')
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $Letter2
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
      text = *
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      correctAns = $CorrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = all keys
      storeCorrect = True
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  Routine goodjob3
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    TextComponent text_27
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_17==FINISHED
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      text:
        Goodjob!

        Press SPACE to continue
    KeyboardComponent key_resp_17
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine baseline_instruction_3
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    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = $key_resp_8==FINISHED
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      text:
        We will now take a baseline recording of 2 minutes.

        A blank screen will be displayed and no action is required.
        Please remain seated and perform no movements during this recording.

        Press SPACE to start
        The baseline recording will start after 3 seconds
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine baseline
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        #import requests
        #IP = 'http://127.0.0.1:8888'

        import string
        letters = list(string.ascii_uppercase)
        presentedLetters = list()
      Begin Routine:
        #r = requests.post(IP + '/toggleMarker?id=3')

        Letter3 = np.random.choice(letters)
    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $Letter3
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    TextComponent text_14
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
      text = *
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  Routine start_0_back
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    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_28
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        We will now take a baseline recording of 2 minutes.

        Again letters will pop-up but no action is required.
        Please remain seated and perform no movements during this recording.

        Press SPACE to start
  Routine goodjob4
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    KeyboardComponent key_resp_21
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_32
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_21==FINISHED
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      text:
        Goodjob!

        Press SPACE to continue
  Routine info_control
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    TextComponent text_22
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_13==FINISHED
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      text:
        The following tasks need to be performed according to the given stimuli:

        UP/DOWN: Move your head vertically up and down
        LEFT/RIGHT: Move your head horizontally left and right
        RANDOM: Move your head in a random manner

        Press SPACE to continue
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start_practice
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    TextComponent text_23
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_14==FINISHED
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      text:
        We will now perform a short practice run to get used to the  test.

        A sequence of words will be shown with each time an interstimulus interval in between.
        The letters are shown for 3 s and the interstimulus interval is around 20 s.

        Press SPACE to start.
        The test will start after 3 seconds
    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        import requests
        IP = 'http://127.0.0.1:8888'

        inter_stimulus = np.arange(16.5,23.5)
      Begin Routine:
        r = requests.post(IP + '/toggleMarker?id=%s' % id1)

        dur = np.random.choice(inter_stimulus)
    TextComponent text_25
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $Word1
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    TextComponent text_26
      letterHeight = 0.05
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = $dur
      text = *
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  Routine start_test
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    KeyboardComponent key_resp_19
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_29
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_19==FINISHED
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      text:
        We will now perform the actual test.

        A longer sequence of words will be shown with each time an interstimulus interval in between.
        The words are shown for 3 s and the interstimulus interval is around 20 s.

        Press SPACE to start.
        The test will start after 3 seconds
  Routine test
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        import requests
        IP = 'http://127.0.0.1:8888'

        inter_stimulus = np.arange(16.5,23.5)
      Begin Routine:
        r = requests.post(IP + '/toggleMarker?id=%s' % id2)

        dur = np.random.choice(inter_stimulus)
    TextComponent text_30
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $Word2
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    TextComponent text_31
      letterHeight = 0.05
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = $dur
      text = *
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  Routine baseline_2
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        import requests
        IP = 'http://127.0.0.1:8888'
      Begin Routine:
        r = requests.post(IP + '/toggleMarker?id=7')
    TextComponent text_33
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = *
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Flow
  Routine Welcome
  Routine info_tests
  Routine info_control
  Routine start_practice
  Routine initial_rest
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = conditions_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Word1': 'UP/DOWN', 'id1': 1},
      {'Word1': 'UP/DOWN', 'id1': 1},
      {'Word1': 'LEFT/RIGHT', 'id1': 2},
      {'Word1': 'LEFT/RIGHT', 'id1': 2},
      {'Word1': 'RANDOM', 'id1': 3},
      {'Word1': 'RANDOM', 'id1': 3}]
    Routine practice
  LoopTerminator trials_4
  Routine goodjob
  Routine baseline_instruction_3
  Routine initial_rest
  Routine baseline_2
  Routine goodjob3
  Routine start_test
  Routine initial_rest
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Word2': 'UP/DOWN', 'id2': 4},
      {'Word2': 'UP/DOWN', 'id2': 4},
      {'Word2': 'UP/DOWN', 'id2': 4},
      {'Word2': 'UP/DOWN', 'id2': 4},
      {'Word2': 'UP/DOWN', 'id2': 4},
      {'Word2': 'UP/DOWN', 'id2': 4},
      {'Word2': 'UP/DOWN', 'id2': 4},
      {'Word2': 'UP/DOWN', 'id2': 4},
      {'Word2': 'UP/DOWN', 'id2': 4},
      {'Word2': 'UP/DOWN', 'id2': 4},
      {'Word2': 'LEFT/RIGHT', 'id2': 5},
      {'Word2': 'LEFT/RIGHT', 'id2': 5},
      {'Word2': 'LEFT/RIGHT', 'id2': 5},
      {'Word2': 'LEFT/RIGHT', 'id2': 5},
      {'Word2': 'LEFT/RIGHT', 'id2': 5},
      {'Word2': 'LEFT/RIGHT', 'id2': 5},
      {'Word2': 'LEFT/RIGHT', 'id2': 5},
      {'Word2': 'LEFT/RIGHT', 'id2': 5},
      {'Word2': 'LEFT/RIGHT', 'id2': 5},
      {'Word2': 'LEFT/RIGHT', 'id2': 5},
      {'Word2': 'RANDOM', 'id2': 6},
      {'Word2': 'RANDOM', 'id2': 6},
      {'Word2': 'RANDOM', 'id2': 6},
      {'Word2': 'RANDOM', 'id2': 6},
      {'Word2': 'RANDOM', 'id2': 6},
      {'Word2': 'RANDOM', 'id2': 6},
      {'Word2': 'RANDOM', 'id2': 6},
      {'Word2': 'RANDOM', 'id2': 6},
      {'Word2': 'RANDOM', 'id2': 6},
      {'Word2': 'RANDOM', 'id2': 6}]
    Routine test
  LoopTerminator trials_5
  Routine goodjob4
  Routine Goodbye
