PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001', 'gender': '', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = N-back
  keyboardBackend = ioHub
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Routines
  Routine Welcome
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = $key_resp==FINISHED
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      text:
        Welcome to the N-back test

        Thank you for participating

        Press SPACE to continue
  Routine Goodbye
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    KeyboardComponent key_resp_11
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_17
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = $key_resp_11==FINISHED
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      text:
        Goodjob!

        You completed the test.
        Please inform the researcher that you are ready.

        Thank you!
  Routine initial_rest
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        countdownClock = core.CountdownTimer(3)
      Each Frame:
        timeRest = int(countdownClock.getTime()) + 1
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every frame] = $timeRest
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  Routine goodjob
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_5==FINISHED
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      text:
        Goodjob!

        Press SPACE to continue
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import requests
        IP = 'http://127.0.0.1:8888'

        import string
        letters = list(string.ascii_uppercase)
        presentedLetters = list()
      Begin Routine:
        r = requests.post(IP + '/toggleMarker?id=' + str(thisSurvey + 4))





        n = 2 # first specify the n condition of the trial/block
        letterSelected = False # a boolean to state a letter has not yet been selected
        if not Target: # this is not a target trial
            while not letterSelected: # repeat the content of this loop until a letter is selected
                Letter = np.random.choice(letters)# if this is not a target then randomly choose
                if len(presentedLetters) < n or Letter != presentedLetters[-n]: # if n letters have not yet been presented, or this is not the same as the n-th trial back
                    letterSelected = True # accept this as the chosen letter
        else:
            Letter = presentedLetters[-n]# if this was a target choose the n'th back
        presentedLetters.append(Letter)
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $Letter
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      correctAns = $CorrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      storeCorrect = True
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  Routine baseline_rest
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    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = *
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  Routine goodjob2
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    TextComponent text_15
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = $key_resp_9==FINISHED
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      text:
        Goodjob!

        Press SPACE to continue
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start_trail
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    TextComponent text_16
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = $key_resp_10==FINISHED
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      text:
        We will now start the trail.

        It will be build up from 3 different blocks of 20 minutes, intermitted by a survey of 1 minute.

        Remember:
        SPACE = Letter is the same as 2 back
        None = Letter is not the same as 2 back

        Goodluck!
        Press SPACE to start
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block_announcement
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    TextComponent text_18
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $Msg
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  Routine fill_survey_test
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        countdownClock = core.CountdownTimer(60) # 60 s = 1 minute
      Each Frame:
        timeRemaining = int(countdownClock.getTime()) + 1
    SliderComponent slider
      forceEndRoutine = False
      granularity = 1
      labels = ('very low = alert', 'low', 'medium   = relaxed wakeful', 'high', 'very high = fatigued')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_8
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Please rate your level of mental fatigue at the moment from 1-5:
        (1 minute time before next block starts)
    TextComponent text_20
      letterHeight = 0.05
      pos = (0.5, -0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every frame] = $timeRemaining
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  Routine fill_survey
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_19
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [condition] = $key_resp_7==FINISHED
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      text:
        Please rate your level of mental fatigue at the moment from 1-5:
        (Press SPACE to continue)
    SliderComponent slider_2
      forceEndRoutine = False
      granularity = 1
      labels = ('very low = alert', 'low', 'medium   = relaxed wakeful', 'high', 'very high = fatigued')
      letterHeight = 0.05
      pos = (0, 0.1)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [condition] = $key_resp_7==FINISHED
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine Instruction_2_back
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = $key_resp_2==FINISHED
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      text:
        You will perform a 2-back task.

        A sequence of letters will be shown with each time an interstimulus interval in between.
        The letters are shown for 0.5 s and the interstimulus interval is 2.5 s. This means  that you have 3 s in total to respond.

        Task: Press SPACE if the shown letter is the same as the letter 2 back in the sequence.

        Press SPACE to continue
  Routine info_tests
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    TextComponent text_21
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_12==FINISHED
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      text:
        You will perform two types of n-back tasks.

        For both tests a sequence of letters will be shown with each time an interstimulus interval in between.
        The letters are shown for 0.5 s and the interstimulus interval is 2.5 s. This means  that you have 3 s in total to respond.

        Press SPACE to continue
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine task_difference
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    TextComponent text_22
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_13==FINISHED
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      text:
        You will have to perform the following task in the 0-back and 2-back test.

        Task 0-back: Press SPACE if the shown letter is the predefined letter (X).
        Task 2-back: Press SPACE if the shown letter is the same as the letter 2 back in the sequence.

        Press SPACE to continue
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_0_back
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    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_24
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = key_resp_15==FINISHED
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      text:
        You will perform a 0-back task.

        A sequence of letters will be shown with each time an interstimulus interval in between.
        The letters are shown for 0.5 s and the interstimulus interval is 2.5 s. This means  that you have 3 s in total to respond.

        Task: Press SPACE if the shown letter is the same as the letter 2 back in the sequence.
  Routine start_practice_2_back
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = $key_resp_3==FINISHED
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      text:
        We will now perform a short practice run to get used to the 2-back test.

        A sequence of letters will be shown with each time an interstimulus interval in between.
        The letters are shown for 0.5 s and the interstimulus interval is 2.5 s. This means  that you have 3 s in total to respond.

        SPACE = letter is the same as 2 back
        None = letter is not the same as 2 back

        Press SPACE to start.
        The test will start after 3 seconds
  Routine start_practice_0_back
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    TextComponent text_23
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_14==FINISHED
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      text:
        We will now perform a short practice run to get used to the 0-back test.

        A sequence of letters will be shown with each time an interstimulus interval in between.
        The letters are shown for 0.5 s and the interstimulus interval is 2.5 s. This means  that you have 3 s in total to respond.

        SPACE = letter is the same as the letter X
        None = letter is not the same as the letter X

        Press SPACE to start.
        The test will start after 3 seconds
    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_2_back
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        import requests
        IP = 'http://127.0.0.1:8888'
      Begin Routine:
        r = requests.post(IP + '/toggleMarker?id=2')
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $Letter2
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      correctAns = $CorrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      storeCorrect = True
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  Routine practice_0_back
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        import requests
        IP = 'http://127.0.0.1:8888'
      Begin Routine:
        r = requests.post(IP + '/toggleMarker?id=1')
    TextComponent text_25
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $Letter1
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    TextComponent text_26
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
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    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      correctAns = $CorrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      storeCorrect = True
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  Routine goodjob3
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    TextComponent text_27
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_17==FINISHED
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      text:
        Goodjob!

        Press SPACE to continue
    KeyboardComponent key_resp_17
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine baseline_instruction_3
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    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = $key_resp_8==FINISHED
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      text:
        We will now take a baseline recording of 2 minutes.

        Letters will pop-up but no action is required.
        Please remain seated and perform no movements during this recording.

        Press SPACE to start
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine baseline
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        import requests
        IP = 'http://127.0.0.1:8888'

        import string
        letters = list(string.ascii_uppercase)
        presentedLetters = list()
      Begin Routine:
        r = requests.post(IP + '/toggleMarker?id=3')

        Letter3 = np.random.choice(letters)
    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $Letter3
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    TextComponent text_14
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
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  Routine start_0_back
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    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_28
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        We will now take a baseline recording of 2 minutes.

        Again letters will pop-up but no action is required.
        Please remain seated and perform no movements during this recording.

        Press SPACE to start
  Routine start_0_back_2
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    KeyboardComponent key_resp_19
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_29
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_19==FINISHED
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      text:
        We will now perform the 0-back test.

        SPACE = letter is the same as the letter X
        None = letter is not the same as the letter X

        Press SPACE to start.
        The test will start after 3 seconds
  Routine routine_0_back
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        import requests
        IP = 'http://127.0.0.1:8888'

        import string
        letters = list(string.ascii_uppercase)
        presentedLetters = list()
      Begin Routine:
        r = requests.post(IP + '/toggleMarker?id=4')

        n = 0 # first specify the n condition of the trial/block
        letterSelected = False # a boolean to state a letter has not yet been selected
        if not Target: # this is not a target trial
            while not letterSelected: # repeat the content of this loop until a letter is selected
                Letter4 = np.random.choice(letters)# if this is not a target then randomly choose
                if Letter4 != 'X': # Letter can not be the target letter
                    letterSelected = True # accept this as the chosen letter
        else:
            Letter4 = 'X' # if this was a target choose the n'th back
        presentedLetters.append(Letter4)
    TextComponent text_30
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $Letter4
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    TextComponent text_31
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
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    KeyboardComponent key_resp_20
      allowedKeys = 'space'
      correctAns = $CorrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      storeCorrect = True
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  Routine goodjob4
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    KeyboardComponent key_resp_21
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_32
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_21==FINISHED
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      text:
        Goodjob!

        Press SPACE to continue
Flow
  Routine Welcome
  Routine info_tests
  Routine task_difference
  Routine start_practice_0_back
  Routine initial_rest
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = conditions_0_back_practice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Letter1': 'E', 'Target': 0, 'CorrAns': None},
      {'Letter1': 'Q', 'Target': 0, 'CorrAns': None},
      {'Letter1': 'X', 'Target': 1, 'CorrAns': 'space'},
      {'Letter1': 'O', 'Target': 0, 'CorrAns': None},
      {'Letter1': 'S', 'Target': 0, 'CorrAns': None},
      {'Letter1': 'E', 'Target': 0, 'CorrAns': None},
      {'Letter1': 'X', 'Target': 1, 'CorrAns': 'space'},
      {'Letter1': 'R', 'Target': 0, 'CorrAns': None},
      {'Letter1': 'O', 'Target': 0, 'CorrAns': None},
      {'Letter1': 'A', 'Target': 0, 'CorrAns': None}]
    Routine practice_0_back
  LoopTerminator trials_4
  Routine goodjob
  Routine start_practice_2_back
  Routine initial_rest
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions_2_back_practice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Letter2': 'A', 'Target': 0, 'CorrAns': None},
      {'Letter2': 'B', 'Target': 0, 'CorrAns': None},
      {'Letter2': 'C', 'Target': 0, 'CorrAns': None},
      {'Letter2': 'B', 'Target': 1, 'CorrAns': 'space'},
      {'Letter2': 'S', 'Target': 0, 'CorrAns': None},
      {'Letter2': 'A', 'Target': 0, 'CorrAns': None},
      {'Letter2': 'Q', 'Target': 0, 'CorrAns': None},
      {'Letter2': 'A', 'Target': 1, 'CorrAns': 'space'},
      {'Letter2': 'Q', 'Target': 1, 'CorrAns': 'space'},
      {'Letter2': 'E', 'Target': 0, 'CorrAns': None}]
    Routine practice_2_back
  LoopTerminator trials
  Routine goodjob2
  Routine baseline_instruction_3
  Routine initial_rest
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = sequential
    nReps = 40
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    Routine baseline
  LoopTerminator trials_3
  Routine goodjob3
  Routine start_0_back_2
  Routine initial_rest
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = conditions_0_back.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 1, 'CorrAns': 'space'},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 1, 'CorrAns': 'space'},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 1, 'CorrAns': 'space'},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 1, 'CorrAns': 'space'},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None},
      {'Target': 0, 'CorrAns': None}]
    Routine routine_0_back
  LoopTerminator trials_5
  Routine goodjob4
  Routine fill_survey
  Routine start_trail
  LoopInitiator block loopType="TrialHandler"
    conditionsFile = randomizer.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'thisCond': 'block1.xlsx', 'Msg': 'Version a', 'thisSurvey': 1},
      {'thisCond': 'block2.xlsx', 'Msg': 'Version b', 'thisSurvey': 2},
      {'thisCond': 'block3.xlsx', 'Msg': 'Version c', 'thisSurvey': 3}]
    Routine block_announcement
    Routine initial_rest
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = $thisCond
      loopType = sequential
      nReps = 1
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      conditions:
        [{'Target': 0, 'CorrAns': None},
        {'Target': 0, 'CorrAns': None},
        {'Target': 0, 'CorrAns': None},
        {'Target': 1, 'CorrAns': 'space'},
        {'Target': 0, 'CorrAns': None},
        {'Target': 0, 'CorrAns': None}]
      Routine trial
    LoopTerminator trials_2
    Routine fill_survey_test
  LoopTerminator block
  Routine Goodbye
